PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Word priming without distractor
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test
    TextComponent TestText_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox_2
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0 , 0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent submit_text_2
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to submit
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    MouseComponent testmouse_2
      clickable = $submit_text_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study word for simple fragment test.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('study_word', 'Elephant')]),
      OrderedDict([('study_word', 'Curtain')]),
      OrderedDict([('study_word', 'Orange')]),
      OrderedDict([('study_word', 'Phone')]),
      OrderedDict([('study_word', 'Pants')]),
      OrderedDict([('study_word', 'Dinosaur')]),
      OrderedDict([('study_word', 'Mango')]),
      OrderedDict([('study_word', 'Computer')]),
      OrderedDict([('study_word', 'Purse')]),
      OrderedDict([('study_word', 'Grass')]),
      OrderedDict([('study_word', 'Picture')]),
      OrderedDict([('study_word', 'Keyboard')]),
      OrderedDict([('study_word', 'Water')]),
      OrderedDict([('study_word', 'Muffin')]),
      OrderedDict([('study_word', 'Jigsaw')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Test and other conditions fragment main.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('Reference', 'Elephant'), ('test_word', 'E_e_h_n_'), ('Old_New', 'Old')]),
      OrderedDict([('Reference', 'Curtain'), ('test_word', 'Cu_ta_n'), ('Old_New', 'Old')]),
      OrderedDict([('Reference', 'Orange'), ('test_word', 'O_a_g_'), ('Old_New', 'Old')]),
      OrderedDict([('Reference', 'Phone'), ('test_word', 'Ph_n_'), ('Old_New', 'Old')]),
      OrderedDict([('Reference', 'Pants'), ('test_word', 'P_n_s'), ('Old_New', 'Old')]),
      OrderedDict([('Reference', 'Dinosaur'), ('test_word', 'D_n_s_u_'), ('Old_New', 'Old')]),
      OrderedDict([('Reference', 'Mango'), ('test_word', 'M_ng_'), ('Old_New', 'Old')]),
      OrderedDict([('Reference', 'Clock'), ('test_word', 'C_o_k'), ('Old_New', 'Old')]),
      OrderedDict([('Reference', 'Purse'), ('test_word', 'P_rs_'), ('Old_New', 'Old')]),
      OrderedDict([('Reference', 'Grass'), ('test_word', 'G_a_s'), ('Old_New', 'Old')]),
      OrderedDict([('Reference', 'Picture'), ('test_word', 'P_c_ur_'), ('Old_New', 'Old')]),
      OrderedDict([('Reference', 'Keyboard'), ('test_word', 'K_y_o_rd'), ('Old_New', 'Old')]),
      OrderedDict([('Reference', 'Water'), ('test_word', 'W_t_r'), ('Old_New', 'Old')]),
      OrderedDict([('Reference', 'Muffin'), ('test_word', 'M_f_in'), ('Old_New', 'Old')]),
      OrderedDict([('Reference', 'Ladder'), ('test_word', 'L_d_e_'), ('Old_New', 'Old')]),
      OrderedDict([('Reference', 'Bubble'), ('test_word', 'B_b_l_'), ('Old_New', 'New')]),
      OrderedDict([('Reference', 'Kitten'), ('test_word', 'Ki_te_'), ('Old_New', 'New')]),
      OrderedDict([('Reference', 'Wafer'), ('test_word', 'W_f_r'), ('Old_New', 'New')])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
    Routine test
  LoopTerminator trials_2
